PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Project_RL
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Routines
  Routine Instruction
    ImageComponent Instruction_image
      image = Instruction_image.png
      size = 1214, 612
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent Begin_task
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Part_1
    PolygonComponent Warning_signal_1
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent The_word_1
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $stimulusWord
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    KeyboardComponent Response_1
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
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  Routine Part_2
    PolygonComponent Warning_signal_2
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent The_word_2
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $stimulusWord_2
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    KeyboardComponent Response_2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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  Routine The_end
    TextComponent The_end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Thank you for participating! Press space bar to end the trial.
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    KeyboardComponent End_task
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instruction
  LoopInitiator Conditions_1 loopType="TrialHandler"
    conditionsFile = conditions_file.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulusWord': 'GIRL', 'theCondition': 'word', 'corrResp': 'left'},
      {'stimulusWord': 'PLANT', 'theCondition': 'word', 'corrResp': 'left'},
      {'stimulusWord': 'BONE', 'theCondition': 'word', 'corrResp': 'left'},
      {'stimulusWord': 'NURSE', 'theCondition': 'word', 'corrResp': 'left'},
      {'stimulusWord': 'NIGHT', 'theCondition': 'word', 'corrResp': 'left'},
      {'stimulusWord': 'CAFE', 'theCondition': 'word', 'corrResp': 'left'},
      {'stimulusWord': 'DATA', 'theCondition': 'word', 'corrResp': 'left'},
      {'stimulusWord': 'FRIEND', 'theCondition': 'word', 'corrResp': 'left'},
      {'stimulusWord': 'BOAT', 'theCondition': 'word', 'corrResp': 'left'},
      {'stimulusWord': 'HOME', 'theCondition': 'word', 'corrResp': 'left'},
      {'stimulusWord': 'POKV', 'theCondition': 'nonword', 'corrResp': 'right'},
      {'stimulusWord': 'XLFE', 'theCondition': 'nonword', 'corrResp': 'right'},
      {'stimulusWord': 'KAFF', 'theCondition': 'nonword', 'corrResp': 'right'},
      {'stimulusWord': 'STRI', 'theCondition': 'nonword', 'corrResp': 'right'},
      {'stimulusWord': 'PYSK', 'theCondition': 'nonword', 'corrResp': 'right'},
      {'stimulusWord': 'DRIN', 'theCondition': 'nonword', 'corrResp': 'right'},
      {'stimulusWord': 'CAFO', 'theCondition': 'nonword', 'corrResp': 'right'},
      {'stimulusWord': 'TRFIC', 'theCondition': 'nonword', 'corrResp': 'right'},
      {'stimulusWord': 'GLIR', 'theCondition': 'nonword', 'corrResp': 'right'},
      {'stimulusWord': 'FRIND', 'theCondition': 'nonword', 'corrResp': 'right'}]
    Routine Part_1
  LoopTerminator Conditions_1
  LoopInitiator Conditions_2 loopType="TrialHandler"
    conditionsFile = conditions2_file.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulusWord_2': 'GIRL CURL', 'theCondition_2': 'word', 'corrResp_2': 'left'},
      {'stimulusWord_2': 'PLANT TREE', 'theCondition_2': 'word', 'corrResp_2': 'left'},
      {'stimulusWord_2': 'BONE CELL', 'theCondition_2': 'word', 'corrResp_2': 'left'},
      {'stimulusWord_2': 'AREA CANDLE', 'theCondition_2': 'word', 'corrResp_2': 'left'},
      {'stimulusWord_2': 'SEAT FOOD', 'theCondition_2': 'word', 'corrResp_2': 'left'},
      {'stimulusWord_2': 'CAFE SHOP', 'theCondition_2': 'word', 'corrResp_2': 'left'},
      {'stimulusWord_2': 'DATA TEXT', 'theCondition_2': 'word', 'corrResp_2': 'left'},
      {'stimulusWord_2': 'HOLE BALL', 'theCondition_2': 'word', 'corrResp_2': 'left'},
      {'stimulusWord_2': 'BOAT SEAT', 'theCondition_2': 'word', 'corrResp_2': 'left'},
      {'stimulusWord_2': 'HOME DECOR', 'theCondition_2': 'word', 'corrResp_2': 'left'},
      {'stimulusWord_2': 'POKV GAME', 'theCondition_2': 'nonword', 'corrResp_2': 'right'},
      {'stimulusWord_2': 'NIGHT WORF', 'theCondition_2': 'nonword', 'corrResp_2': 'right'},
      {'stimulusWord_2': 'KAFF DRINK', 'theCondition_2': 'nonword', 'corrResp_2': 'right'},
      {'stimulusWord_2': 'SHOW STRI ', 'theCondition_2': 'nonword', 'corrResp_2': 'right'},
      {'stimulusWord_2': 'PYSK STAR', 'theCondition_2': 'nonword', 'corrResp_2': 'right'},
      {'stimulusWord_2': 'DRIN GOLF', 'theCondition_2': 'nonword', 'corrResp_2': 'right'},
      {'stimulusWord_2': 'DUST GLIR', 'theCondition_2': 'nonword', 'corrResp_2': 'right'},
      {'stimulusWord_2': 'DANCE CAFO', 'theCondition_2': 'nonword', 'corrResp_2': 'right'}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
    Routine Part_2
  LoopTerminator Conditions_2
  Routine The_end
